begintemplate AmaralCell
public soma, apic, dend //, dend_10, axon
objref all, somatic, basal, apical //, dendritic_10, axonal

create soma[2], apic[117], dend[94] //, dend_10[15], axon[41]

proc topol() { local i
  connect soma[1](0), soma(0)
  /*
  connect axon(0), soma(0)
  for i = 1, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[5](1)
  connect axon[8](0), axon[2](1)
  connect axon[9](0), axon[1](1)
  for i = 10, 11 connect axon[i](0), axon[9](1)
  connect axon[12](0), axon(1)
  for i = 13, 14 connect axon[i](0), axon[i-1](1)
  connect axon[15](0), axon[13](1)
  for i = 16, 17 connect axon[i](0), axon[15](1)
  for i = 18, 19 connect axon[i](0), axon[i-1](1)
  connect axon[20](0), axon[18](1)
  connect axon[21](0), axon[17](1)
  connect axon[22](0), axon[12](1)
  for i = 23, 24 connect axon[i](0), axon[i-1](1)
  connect axon[25](0), axon[23](1)
  connect axon[26](0), axon[22](1)
  for i = 27, 28 connect axon[i](0), axon[i-1](1)
  connect axon[29](0), axon[27](1)
  for i = 30, 31 connect axon[i](0), axon[i-1](1)
  connect axon[32](0), axon[30](1)
  connect axon[33](0), axon[29](1)
  connect axon[34](0), axon[26](1)
  for i = 35, 36 connect axon[i](0), axon[i-1](1)
  connect axon[37](0), axon[35](1)
  connect axon[38](0), axon[34](1)
  for i = 39, 40 connect axon[i](0), axon[38](1)
  */
  connect apic(0), soma(0)
  for i = 1, 3 connect apic[i](0), apic[i-1](1)
  connect apic[4](0), apic[2](1)
  connect apic[5](0), apic[1](1)
  for i = 6, 7 connect apic[i](0), apic[5](1)
  connect apic[8](0), apic(1)
  for i = 9, 10 connect apic[i](0), apic[8](1)
  for i = 11, 12 connect apic[i](0), apic[10](1)
  for i = 13, 15 connect apic[i](0), apic[i-1](1)
  connect apic[16](0), apic[14](1)
  connect apic[17](0), apic[13](1)
  connect apic[18](0), apic[12](1)
  for i = 19, 20 connect apic[i](0), apic[18](1)
  for i = 21, 22 connect apic[i](0), apic[20](1)
  for i = 23, 24 connect apic[i](0), apic[i-1](1)
  connect apic[25](0), apic[23](1)
  for i = 26, 27 connect apic[i](0), apic[25](1)
  connect apic[28](0), apic[22](1)
  for i = 29, 30 connect apic[i](0), apic[28](1)
  for i = 31, 32 connect apic[i](0), apic[30](1)
  for i = 33, 34 connect apic[i](0), apic[32](1)
  for i = 35, 36 connect apic[i](0), apic[34](1)
  connect apic[37](0), soma(0)
  for i = 38, 40 connect apic[i](0), apic[i-1](1)
  connect apic[41](0), apic[39](1)
  for i = 42, 43 connect apic[i](0), apic[41](1)
  for i = 44, 45 connect apic[i](0), apic[43](1)
  connect apic[46](0), apic[38](1)
  for i = 47, 48 connect apic[i](0), apic[46](1)
  for i = 49, 50 connect apic[i](0), apic[i-1](1)
  connect apic[51](0), apic[49](1)
  for i = 52, 53 connect apic[i](0), apic[51](1)
  connect apic[54](0), apic[48](1)
  for i = 55, 56 connect apic[i](0), apic[54](1)
  for i = 57, 58 connect apic[i](0), apic[56](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  for i = 61, 62 connect apic[i](0), apic[60](1)
  for i = 63, 64 connect apic[i](0), apic[62](1)
  connect apic[65](0), apic[37](1)
  for i = 66, 69 connect apic[i](0), apic[i-1](1)
  connect apic[70](0), apic[68](1)
  connect apic[71](0), apic[67](1)
  connect apic[72](0), apic[66](1)
  connect apic[73](0), apic[65](1)
  for i = 74, 75 connect apic[i](0), apic[73](1)
  for i = 76, 77 connect apic[i](0), apic[75](1)
  for i = 78, 79 connect apic[i](0), apic[i-1](1)
  connect apic[80](0), apic[78](1)
  connect apic[81](0), apic[77](1)
  for i = 82, 83 connect apic[i](0), apic[81](1)
  for i = 84, 85 connect apic[i](0), apic[i-1](1)
  connect apic[86](0), apic[84](1)
  connect apic[87](0), apic[83](1)
  for i = 88, 89 connect apic[i](0), apic[i-1](1)
  connect apic[90](0), apic[88](1)
  connect apic[91](0), apic[87](1)
  for i = 92, 93 connect apic[i](0), apic[91](1)
  for i = 94, 95 connect apic[i](0), apic[93](1)
  for i = 96, 97 connect apic[i](0), apic[i-1](1)
  connect apic[98](0), apic[96](1)
  for i = 99, 100 connect apic[i](0), apic[i-1](1)
  connect apic[101](0), apic[99](1)
  connect apic[102](0), apic[98](1)
  for i = 103, 104 connect apic[i](0), apic[102](1)
  connect apic[105](0), apic[95](1)
  for i = 106, 107 connect apic[i](0), apic[105](1)
  for i = 108, 109 connect apic[i](0), apic[107](1)
  for i = 110, 111 connect apic[i](0), apic[109](1)
  for i = 112, 113 connect apic[i](0), apic[111](1)
  connect apic[114](0), soma(0)
  for i = 115, 116 connect apic[i](0), apic[114](1)
  connect dend(0), soma(0)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  connect dend[8](0), dend(1)
  for i = 9, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  connect dend[13](0), dend[9](1)
  connect dend[14](0), dend[8](1)
  for i = 15, 16 connect dend[i](0), dend[i-1](1)
  connect dend[17](0), dend[15](1)
  connect dend[18](0), dend[14](1)
  connect dend[19](0), soma(0)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  for i = 23, 24 connect dend[i](0), dend[22](1)
  for i = 25, 26 connect dend[i](0), dend[24](1)
  connect dend[27](0), dend[19](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  connect dend[30](0), soma(0)
  for i = 31, 33 connect dend[i](0), dend[i-1](1)
  connect dend[34](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[i-1](1)
  connect dend[37](0), dend[35](1)
  connect dend[38](0), dend[34](1)
  connect dend[39](0), dend[31](1)
  for i = 40, 41 connect dend[i](0), dend[i-1](1)
  connect dend[42](0), dend[40](1)
  connect dend[43](0), dend[39](1)
  for i = 44, 45 connect dend[i](0), dend[43](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  connect dend[48](0), dend[30](1)
  for i = 49, 53 connect dend[i](0), dend[i-1](1)
  connect dend[54](0), dend[52](1)
  connect dend[55](0), dend[51](1)
  connect dend[56](0), dend[50](1)
  connect dend[57](0), dend[49](1)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  for i = 60, 61 connect dend[i](0), dend[59](1)
  connect dend[62](0), dend[48](1)
  for i = 63, 65 connect dend[i](0), dend[i-1](1)
  connect dend[66](0), dend[64](1)
  connect dend[67](0), dend[63](1)
  connect dend[68](0), dend[62](1)
  for i = 69, 70 connect dend[i](0), dend[68](1)
  for i = 71, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  connect dend[74](0), dend[70](1)
  for i = 75, 76 connect dend[i](0), dend[74](1)
  connect dend[77](0), soma(0)
  for i = 78, 81 connect dend[i](0), dend[i-1](1)
  connect dend[82](0), dend[80](1)
  connect dend[83](0), dend[79](1)
  for i = 84, 85 connect dend[i](0), dend[i-1](1)
  connect dend[86](0), dend[84](1)
  connect dend[87](0), dend[83](1)
  connect dend[88](0), dend[78](1)
  for i = 89, 90 connect dend[i](0), dend[88](1)
  connect dend[91](0), dend[77](1)
  for i = 92, 93 connect dend[i](0), dend[91](1)
  //connect dend_10(0), soma(0)
  //for i = 1, 7 connect dend_10[i](0), dend_10[i-1](1)
  //connect dend_10[8](0), dend_10[6](1)
  //connect dend_10[9](0), dend_10[5](1)
  //connect dend_10[10](0), dend_10[4](1)
  //connect dend_10[11](0), dend_10[3](1)
  //connect dend_10[12](0), dend_10[2](1)
  //connect dend_10[13](0), dend_10[1](1)
  //connect dend_10[14](0), dend_10(1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, 0, 0, 16.96)
	pt3dadd(0, 8.48, 0, 16.96)
  }
  soma[1] {pt3dclear()
	pt3dadd(0, 0, 0, 16.96)
	pt3dadd(0, -8.48, 0, 16.96)
  }
  /*
  axon {pt3dclear()
	pt3dadd(0, 0, 0, 1.7)
	pt3dadd(6.4, -16.86, -3.09, 1.7)
	pt3dadd(9.92, -20.73, -6.22, 1.7)
	pt3dadd(12.85, -25.04, -10.85, 1.7)
	pt3dadd(17.05, -27.49, -13, 1.7)
	pt3dadd(18.96, -32.19, -16.6, 1.1)
	pt3dadd(21.09, -35.43, -18.19, 1.1)
	pt3dadd(23.48, -40.7, -20.3, 1.1)
	pt3dadd(25.98, -44.46, -24.41, 0.7)
	pt3dadd(35.74, -51.52, -26.25, 0.7)
	pt3dadd(41.34, -55.13, -27.95, 0.7)
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  }
  */
}
/*
proc shape3d_2() {
  axon[10] {	pt3dadd(235.7, 376.2, 80.64, 0.3)
	pt3dadd(238.7, 379.9, 82.09, 0.3)
	pt3dadd(246.9, 385.5, 82.9, 0.3)
	pt3dadd(253, 394.9, 87.8, 0.3)
  }
  axon[11] {pt3dclear()
	pt3dadd(-113, 111.1, 58.51, 0.3)
	pt3dadd(-113.5, 115.2, 59.56, 0.3)
	pt3dadd(-119.5, 120.4, 60.77, 0.3)
	pt3dadd(-121.2, 127.1, 61.88, 0.3)
	pt3dadd(-125.3, 131, 62.04, 0.3)
	pt3dadd(-127.3, 139.8, 65.67, 0.3)
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  }
}
*/
/*
proc shape3d_3() {
  axon[18] {  }
  axon[19] {pt3dclear()
	pt3dadd(486.4, 483.7, 6.74, 0.3)
	pt3dadd(489.3, 482.4, 7.64, 0.3)
	pt3dadd(494.3, 482.3, 5.99, 0.3)
	pt3dadd(498.8, 483.4, 2.37, 0.3)
	pt3dadd(501.2, 483.7, -0.69, 0.3)
	pt3dadd(501.3, 484.1, -0.69, 0.3)
	pt3dadd(502.2, 484.1, -3.22, 0.3)
  }
  axon[20] {pt3dclear()
	pt3dadd(486.4, 483.7, 6.74, 0.3)
	pt3dadd(488.7, 485.9, 8.69, 0.3)
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  }
}
proc shape3d_4() {
  axon[28] {	pt3dadd(323.5, 469, -123.7, 0.3)
	pt3dadd(329.7, 472.9, -129.9, 0.3)
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  }
}
*/
proc shape3d_5() {
/*
  axon[36] {	pt3dadd(-207.7, 186.5, -28.13, 0.3)
	pt3dadd(-209.5, 188.2, -28.07, 0.3)
	pt3dadd(-211.4, 195, -30.95, 0.3)
	pt3dadd(-213.4, 200.8, -34.85, 0.3)
	pt3dadd(-215.5, 204.5, -35.25, 0.3)
	pt3dadd(-219.2, 208.4, -35.61, 0.3)
	pt3dadd(-222.3, 212.8, -38.99, 0.3)
	pt3dadd(-224, 215.5, -38.9, 0.3)
	pt3dadd(-226.3, 218.3, -41.32, 0.3)
	pt3dadd(-227.6, 220.9, -42.77, 0.3)
	pt3dadd(-229.9, 223.7, -44.68, 0.3)
	pt3dadd(-230.6, 226.3, -44.63, 0.3)
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  }
  */
  apic {pt3dclear()
	pt3dadd(0, 0, 0, 5)
	pt3dadd(-2.06, 30.28, 0.55, 5)
	pt3dadd(-4.63, 36.11, -5.31, 3.6)
	pt3dadd(-7.53, 42.98, -8.67, 3.6)
  }
  apic[1] {pt3dclear()
	pt3dadd(-7.53, 42.98, -8.67, 3.6)
	pt3dadd(-15.78, 45.87, -8.91, 0.3)
	pt3dadd(-16.57, 47.97, -9.37, 0.3)
  }
  apic[2] {pt3dclear()
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  }
}
proc shape3d_6() {
  apic[13] {	pt3dadd(-26.75, 131.8, -57.88, 0.3)
  }
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  }
}
proc shape3d_7() {
  apic[33] {	pt3dadd(26.63, 593.7, -147, 0.3)
	pt3dadd(26.55, 605.29, -140.4, 0.3)
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  }
}
proc shape3d_8() {
  apic[64] {	pt3dadd(29.07, 387.8, 42.24, 0.3)
	pt3dadd(32.49, 394.9, 47.2, 0.3)
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  }
}
proc shape3d_9() {
  apic[99] {	pt3dadd(132.3, 412.4, -25.59, 0.3)
	pt3dadd(131.3, 428.6, -30.42, 0.3)
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  }
}
proc shape3d_10() {
  dend[4] {	pt3dadd(-100.6, -39.29, -71.7, 0.3)
	pt3dadd(-103.1, -42.01, -77.66, 0.3)
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  }
}
proc shape3d_11() {
  dend[18] {  }
  dend[19] {pt3dclear()
	pt3dadd(0, 0, 0, 1.1)
	pt3dadd(-1.5, -21.06, -0.39, 1.1)
	pt3dadd(-3.13, -22.4, 0.13, 0.8)
  }
  dend[20] {pt3dclear()
	pt3dadd(-3.13, -22.4, 0.13, 0.8)
	pt3dadd(-6.63, -22.02, -0.25, 0.4)
	pt3dadd(-13.24, -27.35, -0.6, 0.4)
	pt3dadd(-16.78, -32.51, 0.44, 0.4)
	pt3dadd(-21.39, -37.54, -1.46, 0.4)
	pt3dadd(-26.07, -43.58, -1.87, 0.4)
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  }
}
proc shape3d_12() {
  dend[40] {	pt3dadd(29.24, -61.17, 25.88, 0.3)
	pt3dadd(33.19, -67.13, 27.71, 0.3)
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  }
}
proc shape3d_13() {
  dend[58] {	pt3dadd(20.96, -85.96, -61.63, 0.3)
	pt3dadd(22.44, -89.1, -68.2, 0.3)
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  }
}
proc shape3d_14() {
  dend[75] {	pt3dadd(17.52, -126.8, 18.14, 0.3)
	pt3dadd(16.86, -133.19, 19.12, 0.3)
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  }
}
proc shape3d_15() {
  dend[92] {	pt3dadd(96.6, -51.45, -26.52, 0.3)
	pt3dadd(102.8, -58.12, -30.76, 0.3)
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  }
  /*
  dend_10 {pt3dclear()
  	pt3dadd(0, 0, 0, 1)
  	pt3dadd(0.44, 1.86, 0.24, 1)
  }
  dend_10[1] {pt3dclear()
	pt3dadd(0.44, 1.86, 0.24, 1)
	pt3dadd(1303.66, 1535.25, -24.53, 0.3)
  }
  dend_10[2] {pt3dclear()
	pt3dadd(1303.66, 1535.25, -24.53, 0.3)
	pt3dadd(1304.05, 1535.71, -24.54, 0.3)
  }
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  }
  */
}
/*
proc shape3d_16() {

  dend_10[12] {	pt3dadd(-422.3, 781.8, 19.23, 0.3)
	pt3dadd(-411.6, 877.2, 19.73, 0.3)
	pt3dadd(-405.2, 932.8, 20.03, 0.3)
	pt3dadd(-393.5, 1048, 20.67, 0.3)
	pt3dadd(-378.9, 1190, 21.47, 0.3)
	pt3dadd(-354.6, 1315, 21.83, 0.3)
	pt3dadd(-329.5, 1399, 21.83, 0.3)
	pt3dadd(-310.6, 1497, 22.11, 0.3)
	pt3dadd(-310.3, 1595, 22.94, 0.3)
	pt3dadd(-319.89, 1660, 23.78, 0.3)
	pt3dadd(-326, 1697, 24.28, 0.3)
  }
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  }
}
*/
proc basic_shape() {
  shape3d_1()
  //shape3d_2()
  //shape3d_3()
  //shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  //shape3d_16()
}

objref all, somatic, basal, apical //, dendritic_10,axonal
proc subsets() { local i
  objref all, somatic, basal, apical//axonal, dendritic_10
  all = new SectionList()
    for i=0, 1 soma[i] all.append()
    //for i=0, 40 axon[i] all.append()
    for i=0, 116 apic[i] all.append()
    for i=0, 93 dend[i] all.append()
    //for i=0, 14 dend_10[i] all.append()

  somatic = new SectionList()
    for i=0, 1 soma[i] somatic.append()

  //axonal = new SectionList()
  //  for i=0, 40 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 93 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 116 apic[i] apical.append()

  //dendritic_10 = new SectionList()
  //  for i=0, 14 dend_10[i] dendritic_10.append()

}
proc geom() {
}


proc geom_nseg() { 
  soma area(0.5) // make sure diam reflects 3d points 
  // increases number of segments to what neuron calculates
  // to be a good number
  forall {nseg = int((L/(0.1*lambda_f(100))+0.9)/2)*2 + 1}
}

func lambda_f() { // currently accessed section, $1 == frequency 
  return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
}



proc biophys() {
  v_init=-57
  forall insert extracellular
  forall insert pas
  forall Ra = 70
  
  forsec all for i=0,n3d()-1 pt3dchange(i, x3d(i)+$1, y3d(i)+$2, z3d(i)+$3, diam3d(i)+$4)
}

proc init() {
  topol()
  subsets()
  geom()
  biophys($1,$2,$3,$4)
  geom_nseg()
}



endtemplate AmaralCell
